CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^lung-cycle-(?P<Cycle>[0-9]{2})-channel-(?P<Channel>[0-9]{2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Cycle
    Metadata category:Channel

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:6|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
    Select images to measure:DNA
    Select objects to measure:IdentifyPrimaryObjects

IdentifySecondaryObjects:[module_num:7|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enabled:False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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:DNA
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:8|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enabled:False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
    Select images to measure:DNA
    Select objects to measure:IdentifySecondaryObjects

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:Yes
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    Name the output image:BlankOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF0000
    Select objects to display:IdentifyPrimaryObjects

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:BlankOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:blankoverlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:12|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:LayeredOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:IdentifyPrimaryObjects

SaveImages:[module_num:13|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:LayeredOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:layeredoverlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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